<?xml version="1.0" encoding="UTF-8"?>
<batch>
    <batchstep method="net.sf.mzmine.modules.rawdatamethods.filtering.scanfilters.ScanFiltersModule">
        <parameter name="Raw data files" type="GUI_SELECTED_FILES"/>
        <parameter name="Scans"/>
        <parameter name="Suffix">filtered</parameter>
        <parameter name="Filter" selected="Savitzky-Golay filter">
            <module name="Savitzky-Golay filter">
                <parameter name="Number of datapoints">9</parameter>
            </module>
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        </parameter>
        <parameter name="Remove source file after filtering">false</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.rawdatamethods.peakpicking.massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Mass detector" selected="Exact mass">
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            <module name="Exact mass">
                <parameter name="Noise level">300.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">masses</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.rawdatamethods.peakpicking.massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>2</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Mass detector" selected="Exact mass">
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            <module name="Exact mass">
                <parameter name="Noise level">120.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">masses</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.masslistmethods.shoulderpeaksfilter.ShoulderPeaksFilterModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Mass list">masses</parameter>
        <parameter name="Mass resolution">15000.0</parameter>
        <parameter name="Peak model function">Lorentzian</parameter>
        <parameter name="Suffix">filtered</parameter>
        <parameter name="Remove original mass list">false</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.masslistmethods.ADAPchromatogrambuilder.ADAPChromatogramBuilderModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
        </parameter>
        <parameter name="Mass list">masses filtered</parameter>
        <parameter name="Min group size in # of scans">3</parameter>
        <parameter name="Group intensity threshold">0.0</parameter>
        <parameter name="Min highest intensity">0.0</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>15.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">chromatograms</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.filtering.groupms2.GroupMS2Module">
        <parameter name="Peak lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Retention time tolerance" type="percent">1.0</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.4</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Limit by RT edges">false</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.identification.spectraldbsearch.LocalSpectralDBSearchModule">
        <parameter name="Peak lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="MassList">masses filtered</parameter>
        <parameter name="Database file">
            <current_file>D:\Daten\Library\Pigmentpos\20190730_timstof_pos_MS2.json</current_file>
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        </parameter>
        <parameter name="MS level">2</parameter>
        <parameter name="Precursor m/z tolerance">
            <absolutetolerance>0.05</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="Minimum ion intensity">0.0</parameter>
        <parameter name="13C deisotoping" selected="false">
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        </parameter>
        <parameter name="Crop spectra to m/z overlap">true</parameter>
        <parameter name="Spectral m/z tolerance">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>30.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" selected="false"/>
        <parameter name="Minimum  matched signals">2</parameter>
        <parameter name="Similarity" selected="Weighted dot-product cosine">
            <module name="Weighted dot-product cosine">
                <parameter name="Weights">MassBank (mz^2 * I^0.5)</parameter>
                <parameter name="Minimum  cos similarity">0.15</parameter>
                <parameter name="Remove unmatched signals">false</parameter>
            </module>
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        </parameter>
    </batchstep>
</batch>
