<?xml version="1.0" encoding="UTF-8"?><batch>
    <batchstep method="net.sf.mzmine.modules.rawdatamethods.rawclusteredimport.RawClusteredImportModule">
        <parameter name="Raw files (imzML)">
            <file>D:\Daten\Corinna\skin\pr.imzML</file>
        </parameter>
        <parameter name="Threads" selected="true">16</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.02</absolutetolerance>
            <ppmtolerance>30.0</ppmtolerance>
        </parameter>
        <parameter name="Exclusion list" selected="true">
            <parameter name="Exclusion m/z list">
                <current_file>D:\git\tattoo_pigments_spectral_libraries\exclusion_lists\timsTOFfleX_LDI_exclusion_list.csv</current_file>
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            </parameter>
            <parameter name="m/z tolerance">
                <absolutetolerance>0.005</absolutetolerance>
                <ppmtolerance>10.0</ppmtolerance>
            </parameter>
            <parameter name="Remove signals from scans">true</parameter>
        </parameter>
        <parameter name="Noise cut-off">100.0</parameter>
        <parameter name="Min height">250.0</parameter>
        <parameter name="Min similarity">0.9</parameter>
        <parameter name="Minimum matched signals">5</parameter>
        <parameter name="Minimum spectra with DP">3</parameter>
        <parameter name="Minimum spectra with DP (%)" selected="false">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</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.rawdatamethods.peakpicking.massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Mass detector" selected="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">150.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">masses</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.rawdatamethods.peakpicking.massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>2</ms_level>
            <scan_definition/>
        </parameter>
        <parameter name="Mass detector" selected="Exact mass">
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            <module name="Exact mass">
                <parameter name="Noise level">30.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">masses</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.masslistmethods.shoulderpeaksfilter.ShoulderPeaksFilterModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Mass list">masses</parameter>
        <parameter name="Mass resolution">15000.0</parameter>
        <parameter name="Peak model function">Lorentzian</parameter>
        <parameter name="Suffix">filtered</parameter>
        <parameter name="Remove original mass list">false</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.masslistmethods.mergedscanfeaturelist.MergedScanMSMSFeatureListBuilderModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Mass list">masses filtered</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.02</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">merged MS1 matched + MSMS</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.identification.spectraldbsearch.LocalSpectralDBSearchModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="MassList">masses filtered</parameter>
        <parameter name="Spectral database file">
            <current_file>D:\git\tattoo_pigments_spectral_libraries\20190730_timstof_pos_MS1.json</current_file>
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        </parameter>
        <parameter name="MS level">1</parameter>
        <parameter name="Check all scans (only for MS2)">false</parameter>
        <parameter name="Precursor m/z tolerance">
            <absolutetolerance>0.01</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Remove precursor">false</parameter>
        <parameter name="Minimum ion intensity">0.0</parameter>
        <parameter name="13C deisotoping" selected="false">
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        </parameter>
        <parameter name="Min matched isotope signals" selected="true">3</parameter>
        <parameter name="Crop spectra to m/z overlap">false</parameter>
        <parameter name="Spectral m/z tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>30.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" selected="false"/>
        <parameter name="Minimum  matched signals">3</parameter>
        <parameter name="Similarity" selected="Composite dot -product identity (similar to NIST search)">
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            <module name="Composite dot -product identity (similar to NIST search)">
                <parameter name="Weights">NONE (mz^0 * I^1)</parameter>
                <parameter name="Minimum  cos similarity">0.3</parameter>
                <parameter name="Handle unmatched signals">KEEP LIBRARY SIGNALS</parameter>
            </module>
        </parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.identification.spectraldbsearch.LocalSpectralDBSearchModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="MassList">masses filtered</parameter>
        <parameter name="Spectral database file">
            <current_file>D:\git\tattoo_pigments_spectral_libraries\20190730_timstof_pos_MS2.json</current_file>
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        </parameter>
        <parameter name="MS level">2</parameter>
        <parameter name="Check all scans (only for MS2)">true</parameter>
        <parameter name="Precursor m/z tolerance">
            <absolutetolerance>0.01</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="Remove precursor">false</parameter>
        <parameter name="Minimum ion intensity">0.0</parameter>
        <parameter name="13C deisotoping" selected="false">
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        </parameter>
        <parameter name="Min matched isotope signals" selected="false">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</parameter>
        <parameter name="Crop spectra to m/z overlap">true</parameter>
        <parameter name="Spectral m/z tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>30.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" selected="false"/>
        <parameter name="Minimum  matched signals">3</parameter>
        <parameter name="Similarity" selected="Weighted dot-product cosine">
            <module name="Weighted dot-product cosine">
                <parameter name="Weights">NONE (mz^0 * I^1)</parameter>
                <parameter name="Minimum  cos similarity">0.5</parameter>
                <parameter name="Handle unmatched signals">KEEP ALL AND MATCH TO ZERO</parameter>
            </module>
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        </parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.masslistmethods.ADAPchromatogrambuilder.ADAPChromatogramBuilderModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans">
            <ms_level>1</ms_level>
        </parameter>
        <parameter name="Mass list">masses filtered</parameter>
        <parameter name="Min group size in # of scans">3</parameter>
        <parameter name="Group intensity threshold">0.0</parameter>
        <parameter name="Min highest intensity">500.0</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.0015</absolutetolerance>
            <ppmtolerance>15.0</ppmtolerance>
        </parameter>
        <parameter name="Suffix">MS2 precursor search</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.identification.precursordbsearch.PrecursorDBSearchModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Spectral database file (MS/MS)">
            <current_file>D:\git\tattoo_pigments_spectral_libraries\20190730_timstof_pos_MS2.json</current_file>
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        </parameter>
        <parameter name="Precursor m/z tolerance">
            <absolutetolerance>0.02</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" selected="false"/>
    </batchstep>
</batch>
