<?xml version="1.0" encoding="UTF-8"?><batch>
    <batchstep method="net.sf.mzmine.modules.rawdatamethods.rawdataimport.RawDataImportModule">
        <parameter name="Raw data file names">
            <file>E:\User\CXB\auto_batch_results\auto_batch_skin_extract_clustered_spec_best_max.json</file>
        </parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.rawdatamethods.peakpicking.massdetection.MassDetectionModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Scans"/>
        <parameter name="Mass detector" selected="Centroid">
            <module name="Centroid">
                <parameter name="Noise level">0.0</parameter>
            </module>
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        </parameter>
        <parameter name="Mass list name">masses</parameter>
        <parameter name="Output netCDF filename (optional)" selected="false"/>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.masslistmethods.mergedscanfeaturelist.MergedScanMSMSFeatureListBuilderModule">
        <parameter name="Raw data files" type="BATCH_LAST_FILES"/>
        <parameter name="Mass list">masses</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.02</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="Include single spectra">true</parameter>
        <parameter name="Suffix">merged MS1 matched + MSMS</parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.identification.spectraldbsearch.LocalSpectralDBSearchModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="MassList">masses</parameter>
        <parameter name="Spectral database file">
            <current_file>D:\git\tattoo_pigments_spectral_libraries\20190730_timstof_pos_MS1.json</current_file>
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        </parameter>
        <parameter name="MS level">1</parameter>
        <parameter name="Check all scans (only for MS2)">false</parameter>
        <parameter name="Precursor m/z tolerance">
            <absolutetolerance>0.01</absolutetolerance>
            <ppmtolerance>5.0</ppmtolerance>
        </parameter>
        <parameter name="Remove precursor">false</parameter>
        <parameter name="Minimum ion intensity">0.0</parameter>
        <parameter name="13C deisotoping" selected="false">
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        </parameter>
        <parameter name="Min matched isotope signals" selected="true">3</parameter>
        <parameter name="Crop spectra to m/z overlap">false</parameter>
        <parameter name="Spectral m/z tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>30.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" selected="false"/>
        <parameter name="Minimum  matched signals">3</parameter>
        <parameter name="Similarity" selected="Composite dot -product identity (similar to NIST search)">
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            <module name="Composite dot -product identity (similar to NIST search)">
                <parameter name="Weights">NONE (mz^0 * I^1)</parameter>
                <parameter name="Minimum  cos similarity">0.15</parameter>
                <parameter name="Handle unmatched signals">KEEP LIBRARY SIGNALS</parameter>
            </module>
        </parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.identification.spectraldbsearch.LocalSpectralDBSearchModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="MassList">masses</parameter>
        <parameter name="Spectral database file">
            <current_file>D:\git\tattoo_pigments_spectral_libraries\20190730_timstof_pos_MS2.json</current_file>
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        </parameter>
        <parameter name="MS level">2</parameter>
        <parameter name="Check all scans (only for MS2)">true</parameter>
        <parameter name="Precursor m/z tolerance">
            <absolutetolerance>0.01</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="Remove precursor">false</parameter>
        <parameter name="Minimum ion intensity">0.0</parameter>
        <parameter name="13C deisotoping" selected="false">
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        </parameter>
        <parameter name="Min matched isotope signals" selected="false">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</parameter>
        <parameter name="Crop spectra to m/z overlap">true</parameter>
        <parameter name="Spectral m/z tolerance">
            <absolutetolerance>0.005</absolutetolerance>
            <ppmtolerance>30.0</ppmtolerance>
        </parameter>
        <parameter name="Retention time tolerance" selected="false"/>
        <parameter name="Minimum  matched signals">3</parameter>
        <parameter name="Similarity" selected="Weighted dot-product cosine">
            <module name="Weighted dot-product cosine">
                <parameter name="Weights">NONE (mz^0 * I^1)</parameter>
                <parameter name="Minimum  cos similarity">0.5</parameter>
                <parameter name="Handle unmatched signals">KEEP ALL AND MATCH TO ZERO</parameter>
            </module>
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        </parameter>
    </batchstep>
    <batchstep method="net.sf.mzmine.modules.peaklistmethods.identification.carbonblack.CarbonBlackModule">
        <parameter name="Feature lists" type="BATCH_LAST_PEAKLISTS"/>
        <parameter name="Mass list">masses</parameter>
        <parameter name="m/z tolerance">
            <absolutetolerance>0.002</absolutetolerance>
            <ppmtolerance>20.0</ppmtolerance>
        </parameter>
        <parameter name="Minimum consecutive C signals">6</parameter>
        <parameter name="Polarity">POSITIVE</parameter>
        <parameter name="Minimum height (noise level)">700.0</parameter>
        <parameter name="Minimum cos similarity">0.5</parameter>
    </batchstep>
</batch>
